PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Data filename = u'data/%s_%s_%s' % (expInfo['Participant.ID'], expName, expInfo['date'])
  Experiment info = {'Participant.ID': 'P00X', 'Visit': 'Pre / Post', 'Task Version (required)': '1–3', 'fMRI_enabled': 'No', 'EyeL_enabled': 'Yes', 'Stim_Cal_enabled': 'Yes', 'Electrode_Loc': 'LN or UN or Cross'}
  Full-screen window = False
  Monitor = Eyetracker_Monitor
  Screen = 1
  Units = height
  Window size (pixels) = [1680, 1050]
  color = -0.3000, -0.3000, -0.3000
  expName = PAL_Task
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine Initialisation
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    CodeComponent Background_Box
      Code Type = Auto->JS
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      Begin Experiment:
        from psychopy import visual

        grayBox = visual.rect.Rect(win, width=0.8, height=0.8, units='', lineWidth=0, lineColor=None, lineColorSpace=None, fillColor=[0.004, 0.004, 0.004], fillColorSpace='none', pos=(0, 0))
    CodeComponent Task_Version_Select
      Code Type = Auto->JS
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      Begin Experiment:
        from psychopy import core, visual, event

        # get and clean your version string
        TaskVersion = expInfo['Task Version (required)'].strip()

        # pick your files based on version
        if TaskVersion == '1':
            basePath = 'Conditions/Version_1/'
        elif TaskVersion == '2':
            basePath = 'Conditions/Version_2/'
        elif TaskVersion == '3':
            basePath = 'Conditions/Version_3/'
        else:
            # show error message on screen
            errMsg = visual.TextStim(
                win=win,
                text="Warning: Must enter a valid task version number\n(i.e., 1, 2 or 3). \n\n Press any key to quit.",
                color='black',
                height=0.025
            )
            errMsg.draw()
            win.flip()
            # wait for any key before quitting
            event.waitKeys()
            core.quit()

        # if we get here, version was valid
        VersionSelection_H1 = basePath + f'PAL_Deterministic Schedule_V{TaskVersion}_H1.xlsx'
        VersionSelection_H2 = basePath + f'PAL_Deterministic Schedule_V{TaskVersion}_H2.xlsx'
    CodeComponent Initialise_Selection_Outcome_and_StimDefault
      Code Type = Auto->JS
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      Begin Experiment:
        selectedColor = 'grey'
        last_demand = 30
        last_pulse_width = 300
    CodeComponent Initialise_Stim_Cali_Skip
      Code Type = Auto->JS
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      Begin Experiment:
        StimCalEnabled = expInfo.get('Stim_Cal_enabled', 'no')
    CodeComponent Initalise_Eyetrack_code
      Code Type = Auto->JS
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      Before Experiment:
        import pylink
        import os
        from psychopy import gui, core
        from EyeLinkCoreGraphicsPsychoPy import EyeLinkCoreGraphicsPsychoPy

        # === Prompt for filename ===
        while True:
            dlg = gui.Dlg("Enter EDF filename")
            dlg.addField("Filename (≤8 chars)", "TEST")
            ok_data = dlg.show()
            if not dlg.OK:
                core.quit()
            edf_fname = ok_data[0].split(".")[0]
            if len(edf_fname) <= 8 and edf_fname.isalnum():
                break

        edf_file = edf_fname + ".EDF"
        results_dir = "eyetracker_data"
        if not os.path.exists(results_dir):
            os.makedirs(results_dir)
      Begin Routine:
        # === Connect to EyeLink ===
        try:
            el_tracker = pylink.EyeLink("100.1.1.1")
        except:
            el_tracker = pylink.EyeLink(None)  # Dummy Mode fallback

        el_tracker.setOfflineMode()
        el_tracker.openDataFile(edf_file)

        # === Screen and calibration setup ===
        scn_w, scn_h = win.size
        el_tracker.sendCommand(f"screen_pixel_coords = 0 0 {scn_w - 1} {scn_h - 1}")
        el_tracker.sendMessage(f"DISPLAY_COORDS 0 0 {scn_w - 1} {scn_h - 1}")
        genv = EyeLinkCoreGraphicsPsychoPy(el_tracker, win)
        pylink.openGraphicsEx(genv)
  Routine Instructions
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    CodeComponent Box16
      Code Type = Auto->JS
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      Each Frame:
        grayBox.draw()
    CodeComponent Text_Code
      Code Type = Auto->JS
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      Begin Experiment:
        from psychopy import visual, core, event

        # One text stim per color segment
        text_black = visual.TextStim(
            win,
            text="Welcome to the PAL task",
            color='black',
            pos=(-0.55, 0.25),  # adjust as needed
            height=0.03,
            anchorHoriz='left'
        )

        text_blue = visual.TextStim(
            win,
            text=f"ver. {TaskVersion}",
            color='lightblue',
            pos=(-0.3285, 0.25),  # shift right to align after green text
            height=0.03,
            anchorHoriz='left'
        )

        text_further = visual.TextStim(
            win,
            text=f"During this task, you must work out if \n a given image will result in stimulation or not.",
            color='black',
            pos=(-0.5, 0.05),  # shift right to align after green text
            height=0.03,
            anchorHoriz='left'
        )

        text_further2 = visual.TextStim(
            win,
            text=f"The probability of stimulation can change at any point.\n You must learn this probability throughout the task.",
            color='black',
            pos=(-0.5, -0.05),  # shift right to align after green text
            height=0.03,
            anchorHoriz='left'
        )

        text_further3 = visual.TextStim(
            win,
            text=f"Press ← or → to continue.",
            color='black',
            pos=(-0.5, -0.25),  # shift right to align after green text
            height=0.03,
            anchorHoriz='left'
        )
      Each Frame:
        text_black.draw()
        text_blue.draw()
        text_further.draw()
        text_further2.draw()
        text_further3.draw()
    KeyboardComponent Instr_Key1
      allowedKeys = 'left','right','1','2'
      forceEndRoutine = True
      startVal [time (s)] = 0.2
      store = nothing
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
  Routine EyeL_Calib
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    CodeComponent Eye_Calib_1
      Code Type = Auto->JS
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      Begin Routine:
        el_tracker.doTrackerSetup()
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  Routine Break
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    CodeComponent TimerCode
      Code Type = Auto->JS
      disabled = True
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      Begin Experiment:
        from psychopy import visual, core, event
        import numpy as np

        from psychopy import visual, core, event
        import numpy as np

        # === SETTINGS ===
        timer_duration = 210  # in seconds
        radius = 0.075        # size of the circular timer
        pos = (0, 0)          # position of the timer on screen

        # === SETUP WINDOW ===
        #win = visual.Window(fullscr=True, color='grey', units='height')

        # === BACKGROUND BOX ===
        grayBox2 = visual.Rect(
            win,
            width=0.8,
            height=0.8,
            units='height',
            lineWidth=0,
            lineColor=None,
            fillColor=[0.004, 0.004, 0.004],
            fillColorSpace='rgb',
            pos=(0, 0)
        )

        # === CIRCLE BEHIND THE WEDGE ===
        circle_bg = visual.Circle(
            win,
            radius=radius,
            edges=128,
            fillColor=[0.1, 0.1, 0.1],  # dark gray
            fillColorSpace='rgb',
            lineColor=None,
            pos=pos,
            autoDraw=False
        )

        # === TIMER WEDGE FUNCTION ===
        def make_wedge(progress_fraction, radius=0.2, resolution=100):
            # Creates a counterclockwise wedge starting from top (90 degrees)
            angle = 360 * progress_fraction
            num_points = max(2, int(resolution * progress_fraction))
            theta = np.linspace(90, 90 + angle, num_points)
            x = np.cos(np.deg2rad(theta)) * radius
            y = np.sin(np.deg2rad(theta)) * radius
            verts = [(0, 0)] + list(zip(x, y))
            return verts

        # === INITIALIZE TIMER CLOCK ===
        timer_clock = core.Clock()

        # === INITIALIZE WEDGE SHAPE ===
        wedge = visual.ShapeStim(
            win,
            vertices=make_wedge(1.0, radius),
            fillColor=[0.28, 0.28, 0.28],
            lineColor=None,
            fillColorSpace='rgb',
            pos=pos,
            closeShape=True,
            autoDraw=False
        )

        # === OPTIONAL LABEL TEXT ===
        label = visual.TextStim(
            win,
            text="This is a break period. You are over 50% complete.\nYou may relax and exit the eyetracker.",
            pos=(0, -0.325),
            color='black',
            height=0.025
        )

        # === START TIMER ===
        timer_clock.reset()
        running = True

        while running:
            elapsed = timer_clock.getTime()
            progress = max(0, 1 - (elapsed / timer_duration))

            # ESC to quit
            keys = event.getKeys()
            if 'escape' in keys:
                core.quit()

            # Update wedge
            if elapsed < timer_duration:
                wedge.vertices = make_wedge(progress, radius)

            # Draw components (in order)
            grayBox2.draw()       # background box
            circle_bg.draw()      # circle background behind wedge
            if elapsed < timer_duration:
                wedge.draw()      # wedge timer
            label.draw()          # text label

            # Flip screen
            win.flip()

            # End after time limit
            if elapsed >= timer_duration:
                running = False

        # === CONTINUE TO NEXT ROUTINE (no exit) ===
        # Leave win open, ready for next block or routine
      Each Frame:
        if not hasattr(thisExp, 'skipFlagChecked'):
            if fMRI_enabled.lower() in ['yes', 'y']:
                continueRoutine = False
            thisExp.skipFlagChecked = True

        if continueRoutine:
            grayBox2.draw()

            elapsed = timer_clock.getTime()
            progress = max(0, 1 - (elapsed / timer_duration))

            wedge.vertices = make_wedge(progress)

            if elapsed < timer_duration:
                wedge.draw()
    TextComponent Break_Period
      color = black
      letterHeight = 0.025
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180
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      text:
        This is a three minute rest period.

        You may exit the eyetracker.

        When the rest has ended, the experiment will resume.
    CodeComponent Break_Box
      Code Type = Auto->JS
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      Each Frame:
        grayBox.draw()
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  Routine Main_Routine_ISI_H1
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    TextComponent Main_Task_H1_ISI
      color [set every repeat] = -0.7500, -0.7500, -0.7500
      letterHeight = 0.125
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Pre_ISI
      text [set every repeat] = +
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    CodeComponent Box1
      Code Type = Auto->JS
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      Each Frame:
        grayBox.draw()
    CodeComponent Timer_1
      Code Type = Auto->JS
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      Begin Routine:
        time_trialBegin = globalClock.getTime()

        el_tracker.sendMessage('!V POST_EVENT TRIAL_NO %s' % Trial_No)
        el_tracker.sendMessage('!V POST_EVENT CUE_TYPE %s' % Cue_Type)
        el_tracker.sendMessage('!V POST_EVENT CUE_PROB %s' % Cue_Prob)
        el_tracker.sendMessage('!V POST_EVENT REVERSAL_EVENT %s' % Reversal_event)
        el_tracker.sendMessage('!V POST_EVENT ODDBALL %s' % Oddball)

        if Estimation_Select.keys == 'left' and Outcome == 1:
            el_tracker.sendMessage("POST_EVENT OUTCOME SURPRISE_SHOCK")

        if Estimation_Select.keys == 'left' and Outcome == 0:
            el_tracker.sendMessage("POST_EVENT OUTCOME NOSURPRISE_NOSHOCK")

        if Estimation_Select.keys == 'right' and Outcome == 1:
            el_tracker.sendMessage("POST_EVENT OUTCOME NOSURPRISE_SHOCK")

        if Estimation_Select.keys == 'right' and Outcome == 0:
            el_tracker.sendMessage("POST_EVENT OUTCOME SURPRISE_NOSHOCK")
      End Routine:
        time_trialEnd = globalClock.getTime()

        thisExp.addData('Post2_ISI_Begin', time_trialBegin)
        thisExp.addData('Post2_ISI_End', time_trialEnd)

        el_tracker.sendMessage(f"TRIAL_END")
        el_tracker.sendMessage(f"TRIAL_TIME_END {time_trialEnd:.3f}")
  Routine Main_Routine_Stimulus_Selection_H2
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    ImageComponent Cued_Image_2
      image [set every repeat] = $Fractal_img
      size = (0.2, 0.2)
      startVal [time (s)] = 0.1
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    KeyboardComponent Estimation_Select_2
      allowedKeys = 'left','right','1','2'
      correctAns = $High_Prob_Choice_Corr
      forceEndRoutine = True
      startVal [time (s)] = 0.1
      storeCorrect = True
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    CodeComponent Store_Selection_2
      Code Type = Auto->JS
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      Begin Experiment:
        lastKey = None
        selectedColor = 'grey'
      End Routine:
        if Estimation_Select_2.keys:
            lastKey = Estimation_Select_2.keys
            if lastKey in ['left', '1']:
                selectedColor = [0.0000, 0.3, 0.05]
            elif lastKey in ['right', '2']:
                selectedColor = [0.52, 0.4, -0.02]
            else:
                selectedColor = 'grey'
        else:
            lastKey = None
            selectedColor = 'grey'
    CodeComponent Box7
      Code Type = Auto->JS
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      Each Frame:
        grayBox.draw()
    CodeComponent Timer_8
      Code Type = Auto->JS
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      Begin Routine:
        time_trialBegin = globalClock.getTime()

        el_tracker.sendMessage(f"TRIAL_BEGIN")
        el_tracker.sendMessage(f"TRIAL_TIME_BEGIN {time_trialBegin:.3f}")

        el_tracker.sendMessage('!V STIMULUS_CHOICE TRIAL_NO %s' % Trial_No)
        el_tracker.sendMessage('!V STIMULUS_CHOICE CUE_TYPE %s' % Cue_Type)
        el_tracker.sendMessage('!V STIMULUS_CHOICE CUE_PROB %s' % Cue_Prob)
        el_tracker.sendMessage('!V STIMULUS_CHOICE REVERSAL_EVENT %s' % Reversal_event)
        el_tracker.sendMessage('!V STIMULUS_CHOICE ODDBALL %s' % Oddball)
      End Routine:
        time_trialEnd = globalClock.getTime()

        thisExp.addData('Choice_Begin_Time', time_trialBegin)
        thisExp.addData('Choice_End_Time', time_trialEnd)
  Routine Main_Routine_Stimulus_Post_Selection_H1
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    PolygonComponent Selection_Result
      fillColor [set every repeat] = $selectedColor
      lineColor [set every repeat] = grey
      shape = rectangle
      size = (0.225, 0.225)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    ImageComponent Cued_image_post
      image [set every repeat] = $Fractal_img
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    CodeComponent Box3
      Code Type = Auto->JS
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      Each Frame:
        grayBox.draw()
    CodeComponent Timer_3
      Code Type = Auto->JS
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      Begin Routine:
        time_trialBegin = globalClock.getTime()

        el_tracker.sendMessage('!V STIMULUS_SELECTION TRIAL_NO %s' % Trial_No)
        el_tracker.sendMessage('!V STIMULUS_SELECTION CUE_TYPE %s' % Cue_Type)
        el_tracker.sendMessage('!V STIMULUS_SELECTION CUE_PROB %s' % Cue_Prob)
        el_tracker.sendMessage('!V STIMULUS_SELECTION REVERSAL_EVENT %s' % Reversal_event)
        el_tracker.sendMessage('!V STIMULUS_SELECTION ODDBALL %s' % Oddball)
      End Routine:
        time_trialEnd = globalClock.getTime()

        thisExp.addData('Post_choice_Begin_Time', time_trialBegin)
        thisExp.addData('Post_choice_End_Time', time_trialEnd)
  Routine Main_Routine_Stimulus_Selection_H1
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    ImageComponent Cued_Image
      image [set every repeat] = $Fractal_img
      size = (0.2, 0.2)
      startVal [time (s)] = 0.1
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    KeyboardComponent Estimation_Select
      allowedKeys = 'left','right','1','2'
      correctAns = $High_Prob_Choice_Corr
      forceEndRoutine = True
      startVal [time (s)] = 0.1
      storeCorrect = True
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    CodeComponent Store_Selection
      Code Type = Auto->JS
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      Begin Experiment:
        lastKey = None
        selectedColor = 'grey'
      End Routine:
        if Estimation_Select.keys:
            lastKey = Estimation_Select.keys
            if lastKey in ['left', '1']:
                selectedColor = [0.0000, 0.3, 0.05]
            elif lastKey in ['right', '2']:
                selectedColor = [0.52, 0.4, -0.02]
            else:
                selectedColor = 'grey'
        else:
            lastKey = None
            selectedColor = 'grey'
    CodeComponent Box2
      Code Type = Auto->JS
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      Each Frame:
        grayBox.draw()
    CodeComponent Timer_2
      Code Type = Auto->JS
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      Begin Routine:
        time_trialBegin = globalClock.getTime()


        el_tracker.sendMessage(f"TRIAL_BEGIN")
        el_tracker.sendMessage(f"TRIAL_TIME_BEGIN {time_trialBegin:.3f}")

        el_tracker.sendMessage('!V STIMULUS_CHOICE TRIAL_NO %s' % Trial_No)
        el_tracker.sendMessage('!V STIMULUS_CHOICE CUE_TYPE %s' % Cue_Type)
        el_tracker.sendMessage('!V STIMULUS_CHOICE CUE_PROB %s' % Cue_Prob)
        el_tracker.sendMessage('!V STIMULUS_CHOICE REVERSAL_EVENT %s' % Reversal_event)
        el_tracker.sendMessage('!V STIMULUS_CHOICE ODDBALL %s' % Oddball)
      End Routine:
        time_trialEnd = globalClock.getTime()

        thisExp.addData('Choice_Begin_Time', time_trialBegin)
        thisExp.addData('Choice_End_Time', time_trialEnd)
  Routine Main_Task_PostISI_H1
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    TextComponent Main_Task_H1_Post_ISI
      color = -0.7500, -0.7500, -0.7500
      letterHeight = 0.125
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = $Int_ISI
      text = +
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    CodeComponent Box4
      Code Type = Auto->JS
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      Each Frame:
        grayBox.draw()
    CodeComponent Timer_4
      Code Type = Auto->JS
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      End Routine:
        time_trialEnd = globalClock.getTime()

        thisExp.addData('PostISI_End_Time', time_trialEnd)
  Routine Main_Task_Post_Outcome_H1
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    CodeComponent Shock_Code
      Code Type = Py
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      Before Experiment:
        import os
        import sys
        import ctypes

        # --- Step 1: Set paths ---
        ds8r_dir = r"C:\Users\PERLadmin\Desktop\DOREA_Task_Battery\PAL\DS8R"
        dll_path = os.path.join(ds8r_dir, "D128RProxy.dll")

        # --- Step 2: Load the DLL manually ---
        try:
            ctypes.WinDLL(dll_path)
            print("✅ DLL loaded manually.")
        except Exception as e:
            print(f"❌ DLL load failed: {e}")

        # --- Step 3: Update working directory and sys.path ---
        os.chdir(ds8r_dir)
        sys.path.append(ds8r_dir)

        # --- Step 4: Import DS8R module ---
        from ds8r import DS8R
        print("✅ DS8R module imported successfully.")

        import threading
      Begin Experiment:
        ctl = DS8R(
            demand=10,          # adjust as needed
            pulse_width=100,    # adjust as needed
            enabled=0,
            dwell=10,
            mode=1,
            polarity=1,
            source=1,
        )

        # Define a function to run in a separate thread
        def safe_run():
            try:
                ctl.run()
            except Exception as e:
                print(f"❌ DS8R trigger error: {e}")
      Begin Routine:
        ctl.demand = last_demand
        ctl.pulse_width = last_pulse_width
        ctl.enabled = 1  # Re-arm device

        if Outcome == 1:
            print("⚡ About to trigger DS8R...")

            # Create and start the thread
            trigger_thread = threading.Thread(target=safe_run)
            trigger_thread.start()

            # Wait for the thread to finish, with a timeout
            trigger_thread.join(timeout=2.0)  # adjust timeout as needed

            if trigger_thread.is_alive():
                print("⚠️ DS8R trigger timed out — skipping trigger this trial.")
                # Optionally, try to reset ctl or log more info
            else:
                print("✅ DS8R trigger completed.")
        else:
            print("⏭ No trigger this trial (Outcome != 1).")
    CodeComponent Box5
      Code Type = Auto->JS
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      Each Frame:
        grayBox.draw()
    CodeComponent Timer_5
      Code Type = Auto->JS
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      Begin Routine:
        time_trialBegin = globalClock.getTime()

        el_tracker.sendMessage('!V EVENT TRIAL_NO %s' % Trial_No)
        el_tracker.sendMessage('!V EVENT CUE_TYPE %s' % Cue_Type)
        el_tracker.sendMessage('!V EVENT CUE_PROB %s' % Cue_Prob)
        el_tracker.sendMessage('!V EVENT REVERSAL_EVENT %s' % Reversal_event)
        el_tracker.sendMessage('!V EVENT ODDBALL %s' % Oddball)


        if Estimation_Select.keys == 'left' and Outcome == 1:
            el_tracker.sendMessage("EVENT OUTCOME SURPRISE_SHOCK")

        if Estimation_Select.keys == 'left' and Outcome == 0:
            el_tracker.sendMessage("EVENT OUTCOME NOSURPRISE_NOSHOCK")

        if Estimation_Select.keys == 'right' and Outcome == 1:
            el_tracker.sendMessage("EVENT OUTCOME NOSURPRISE_SHOCK")

        if Estimation_Select.keys == 'right' and Outcome == 0:
            el_tracker.sendMessage("EVENT OUTCOME SURPRISE_NOSHOCK")
      End Routine:
        time_trialEnd = globalClock.getTime()

        thisExp.addData('Outcome_Delivered_Time', time_trialBegin)
        thisExp.addData('Outcome_Delivered_Routine_End', time_trialEnd)
    TextComponent Cross_Outcomed
      color = -1.0000, -0.6706, -0.3490
      letterHeight = 0.125
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = +
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  Routine Main_Routine_Stimulus_Post_Selection_H2
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    PolygonComponent Selection_Result_2
      fillColor [set every repeat] = $selectedColor
      lineColor [set every repeat] = grey
      shape = rectangle
      size = (0.225, 0.225)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    ImageComponent Cued_image_post_2
      image [set every repeat] = $Fractal_img
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    CodeComponent Box8
      Code Type = Auto->JS
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      Each Frame:
        grayBox.draw()
    CodeComponent Timer_9
      Code Type = Auto->JS
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      Begin Routine:
        time_trialBegin = globalClock.getTime()

        el_tracker.sendMessage('!V STIMULUS_SELECTION TRIAL_NO %s' % Trial_No)
        el_tracker.sendMessage('!V STIMULUS_SELECTION CUE_TYPE %s' % Cue_Type)
        el_tracker.sendMessage('!V STIMULUS_SELECTION CUE_PROB %s' % Cue_Prob)
        el_tracker.sendMessage('!V STIMULUS_SELECTION REVERSAL_EVENT %s' % Reversal_event)
        el_tracker.sendMessage('!V STIMULUS_SELECTION ODDBALL %s' % Oddball)
      End Routine:
        time_trialEnd = globalClock.getTime()

        thisExp.addData('Post_choice_Begin_Time', time_trialBegin)
        thisExp.addData('Post_choice_End_Time', time_trialEnd)
  Routine Main_Task_PostISI_H2
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    TextComponent Main_Task_H1_Post_ISI_2
      color = -0.7500, -0.7500, -0.7500
      letterHeight = 0.125
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = $Int_ISI
      text = +
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    CodeComponent Box9
      Code Type = Auto->JS
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      Each Frame:
        grayBox.draw()
    CodeComponent Timer_10
      Code Type = Auto->JS
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      End Routine:
        time_trialEnd = globalClock.getTime()

        thisExp.addData('PostISI_End_Time', time_trialEnd)
  Routine Main_Task_Post_Outcome_H2
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    TextComponent Cross_Outcomed_2
      color = -1.0000, -0.6706, -0.3490
      letterHeight = 0.125
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = +
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    CodeComponent Box10
      Code Type = Auto->JS
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      Each Frame:
        grayBox.draw()
    CodeComponent Timer_11
      Code Type = Auto->JS
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      Begin Routine:
        time_trialBegin = globalClock.getTime()

        el_tracker.sendMessage('!V EVENT TRIAL_NO %s' % Trial_No)
        el_tracker.sendMessage('!V EVENT CUE_TYPE %s' % Cue_Type)
        el_tracker.sendMessage('!V EVENT CUE_PROB %s' % Cue_Prob)
        el_tracker.sendMessage('!V EVENT REVERSAL_EVENT %s' % Reversal_event)
        el_tracker.sendMessage('!V EVENT ODDBALL %s' % Oddball)

        if Estimation_Select_2.keys == 'left' and Outcome == 1:
            el_tracker.sendMessage("EVENT OUTCOME SURPRISE_SHOCK")

        if Estimation_Select_2.keys == 'left' and Outcome == 0:
            el_tracker.sendMessage("EVENT OUTCOME NOSURPRISE_NOSHOCK")

        if Estimation_Select_2.keys == 'right' and Outcome == 1:
            el_tracker.sendMessage("EVENT OUTCOME NOSURPRISE_SHOCK")

        if Estimation_Select_2.keys == 'right' and Outcome == 0:
            el_tracker.sendMessage("EVENT OUTCOME SURPRISE_NOSHOCK")
      End Routine:
        time_trialEnd = globalClock.getTime()

        thisExp.addData('Outcome_Delivered_Time', time_trialBegin)
        thisExp.addData('Outcome_Delivered_Routine_End', time_trialEnd)
    CodeComponent Shock_Code_2
      Code Type = Auto->JS
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      Before Experiment:
        import os
        import sys
        import ctypes

        # --- Step 1: Set paths ---
        ds8r_dir = r"C:\Users\PERLadmin\Desktop\DOREA_Task_Battery\PAL\DS8R"
        dll_path = os.path.join(ds8r_dir, "D128RProxy.dll")

        # --- Step 2: Load the DLL manually ---
        try:
            ctypes.WinDLL(dll_path)
            print("✅ DLL loaded manually.")
        except Exception as e:
            print(f"❌ DLL load failed: {e}")

        # --- Step 3: Update working directory and sys.path ---
        os.chdir(ds8r_dir)
        sys.path.append(ds8r_dir)

        # --- Step 4: Import DS8R module ---
        from ds8r import DS8R
        print("✅ DS8R module imported successfully.")

        import threading
      Begin Experiment:
        ctl = DS8R(
            demand=10,          # adjust as needed
            pulse_width=100,    # adjust as needed
            enabled=0,
            dwell=10,
            mode=1,
            polarity=1,
            source=1,
        )

        # Define a function to run in a separate thread
        def safe_run():
            try:
                ctl.run()
            except Exception as e:
                print(f"❌ DS8R trigger error: {e}")
      Begin Routine:
        ctl.demand = last_demand
        ctl.pulse_width = last_pulse_width
        ctl.enabled = 1  # Re-arm device

        if Outcome == 1:
            print("⚡ About to trigger DS8R...")

            # Create and start the thread
            trigger_thread = threading.Thread(target=safe_run)
            trigger_thread.start()

            # Wait for the thread to finish, with a timeout
            trigger_thread.join(timeout=2.0)  # adjust timeout as needed

            if trigger_thread.is_alive():
                print("⚠️ DS8R trigger timed out — skipping trigger this trial.")
                # Optionally, try to reset ctl or log more info
            else:
                print("✅ DS8R trigger completed.")
        else:
            print("⏭ No trigger this trial (Outcome != 1).")
  Routine Task_End
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    CodeComponent Box11
      Code Type = Auto->JS
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      Each Frame:
        grayBox.draw()
    TextComponent End_Text
      color = black
      letterHeight = 0.025
      startVal [time (s)] = 4
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      text:
        End of test.

        Thank you for participating.

        Please inform the researcher of your completion.

        Press 'escape' to close.
    CodeComponent Timer_Final
      Code Type = Auto->JS
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      End Routine:
        time_trialEnd = globalClock.getTime()

        thisExp.addData('Experiment_End_Time', time_trialEnd)
    CodeComponent Send_Eyetracker_EDF
      Code Type = Auto->JS
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      Begin Routine:
        # Assume `el_tracker` and `edf_fname` are already defined
        if el_tracker.isConnected():
            el_tracker.setOfflineMode()
            pylink.msecDelay(500)

            try:
                el_tracker.closeDataFile()
            except RuntimeError as err:
                print("Error closing EDF on Host:", err)

            print("Transferring EDF file from Host...")

            # Define where to save locally
            local_path = f"eyetracker_data/{edf_fname}.EDF"  # or any path you want

            try:
                el_tracker.receiveDataFile(edf_fname + ".EDF", local_path)
                print(f"EDF successfully saved to {local_path}")
            except RuntimeError as err:
                print("Error downloading EDF:", err)

            el_tracker.close()
  Routine Post_Break
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    TextComponent Post_break_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.025
      startVal [time (s)] = 0.0
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      text:
        The break period has elapsed. Please call a researcher.

        Recalibration will commence on the next screen.


        Press ← or → to continue.
    KeyboardComponent Post_break_keys
      allowedKeys = 'left','right','1','2'
      forceEndRoutine = True
      startVal [time (s)] = 0.2
      store = nothing
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    CodeComponent Box13
      Code Type = Auto->JS
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      Each Frame:
        grayBox.draw()
    CodeComponent Skipper3
      Code Type = Auto->JS
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      Begin Experiment:
        fMRI_enabled = expInfo.get('fMRI_enabled', 'no')
      Begin Routine:
        if fMRI_enabled.lower() in ['yes', 'y']:
            continueRoutine = False
  Routine Instructions_2
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    CodeComponent Box17
      Code Type = Auto->JS
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      Each Frame:
        grayBox.draw()
    CodeComponent Text_code_2
      Code Type = Auto->JS
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      Begin Experiment:
        from psychopy import visual, core, event

        # One text stim per color segment
        text_black3 = visual.TextStim(
            win,
            text="You must indicate what the image will \n result in by pressing ← or →.",
            color='black',
            pos=(-0.5, 0.25),  # adjust as needed
            height=0.03,
            anchorHoriz='left'
        )

        text_black4 = visual.TextStim(
            win,
            text="→ means stimulation will occur. It will display: ",
            color='black',
            pos=(-0.55, 0.1),  # adjust as needed
            height=0.03,
            anchorHoriz='left'
        )

        text_black5 = visual.TextStim(
            win,
            text="← means nothing will occur. It will display:  ",
            color='black',
            pos=(-0.525, 0.0),  # adjust as needed
            height=0.03,
            anchorHoriz='left'
        )

        text_further3 = visual.TextStim(
            win,
            text=f"Press ← or → to continue.",
            color='black',
            pos=(-0.5, -0.25),  # shift right to align after green text
            height=0.03,
            anchorHoriz='left'
        )

        example_image1 = visual.ImageStim(
            win=win,
            image='Extra_img/Square_shock.png',
            pos=(0.28, 0.095),      # adjust to your desired screen location
            size=(0.035, 0.035)       # scale image as needed (in norm units or pixels)
        )

        example_image2 = visual.ImageStim(
            win=win,
            image='Extra_img/Square_noshock.png',
            pos=(0.28, -0.0025),      # adjust to your desired screen location
            size=(0.035, 0.035)       # scale image as needed (in norm units or pixels)
        )
      Each Frame:
        text_black3.draw()
        text_black4.draw()
        text_black5.draw()
        text_further3.draw()
        example_image1.draw()
        example_image2.draw()
    KeyboardComponent Instr_Key2
      allowedKeys = 'left','right','1','2'
      forceEndRoutine = True
      startVal [time (s)] = 0.2
      store = nothing
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  Routine Instructions_3
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    CodeComponent Box18
      Code Type = Auto->JS
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      Each Frame:
        grayBox.draw()
    CodeComponent Text_code_3
      Code Type = Auto->JS
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      Begin Experiment:
        from psychopy import visual, core, event

        # One text stim per color segment
        text_ISI_instr1 = visual.TextStim(
            win,
            text="When you make a choice, this cross wil appear: ",
            color='black',
            pos=(-0.5, 0.25),  # adjust as needed
            height=0.03,
            anchorHoriz='left'
        )

        text_ISI_instr2 = visual.TextStim(
            win,
            text="Please focus on the cross while it appears.",
            color='black',
            pos=(-0.5, 0.125),  # adjust as needed
            height=0.03,
            anchorHoriz='left'
        )

        text_ISI_instr3 = visual.TextStim(
            win,
            text="When an event has occured (i.e. stimulation or not), \n the cross will change colour:",
            color='black',
            pos=(-0.5, 0.0),  # adjust as needed
            height=0.03,
            anchorHoriz='left'
        )

        text_ISI_instr4 = visual.TextStim(
            win,
            text=f"Press ← or → to continue.",
            color='black',
            pos=(-0.5, -0.25),  # shift right to align after green text
            height=0.03,
            anchorHoriz='left'
        )

        example_image3 = visual.ImageStim(
            win=win,
            image='Extra_img/inter_ISI.png',
            pos=(0.34, 0.248),      # adjust to your desired screen location
            size=(0.05, 0.055)       # scale image as needed (in norm units or pixels)
        )

        example_image4 = visual.ImageStim(
            win=win,
            image='Extra_img/Event_Fixation.png',
            pos=(0.22, -0.0185),      # adjust to your desired screen location
            size=(0.05, 0.05)       # scale image as needed (in norm units or pixels)
        )
      Each Frame:
        text_ISI_instr1.draw()
        text_ISI_instr2.draw()
        text_ISI_instr3.draw()
        text_ISI_instr4.draw()
        example_image3.draw()
        example_image4.draw()
    KeyboardComponent Instr_Key3
      allowedKeys = 'left','right','1','2'
      forceEndRoutine = True
      startVal [time (s)] = 0.2
      store = nothing
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  Routine Blank
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    TextComponent Blank_Text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.05
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    CodeComponent Box21
      Code Type = Auto->JS
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      Each Frame:
        grayBox.draw()
    CodeComponent Timer_PostISI
      Code Type = Auto->JS
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      Begin Routine:
        time_trialBegin = globalClock.getTime()

        el_tracker.sendMessage('!V POST_CHOICE_ISI TRIAL_NO %s' % Trial_No)
        el_tracker.sendMessage('!V POST_CHOICE_ISI CUE_TYPE %s' % Cue_Type)
        el_tracker.sendMessage('!V POST_CHOICE_ISI CUE_PROB %s' % Cue_Prob)
        el_tracker.sendMessage('!V POST_CHOICE_ISI REVERSAL_EVENT %s' % Reversal_event)
        el_tracker.sendMessage('!V POST_CHOICE_ISI ODDBALL %s' % Oddball)

        if Estimation_Select.keys == 'left' and Outcome == 1:
            el_tracker.sendMessage("POST_CHOICE_ISI OUTCOME SURPRISE_SHOCK")

        if Estimation_Select.keys == 'left' and Outcome == 0:
            el_tracker.sendMessage("POST_CHOICE_ISI OUTCOME NOSURPRISE_NOSHOCK")

        if Estimation_Select.keys == 'right' and Outcome == 1:
            el_tracker.sendMessage("POST_CHOICE_ISI OUTCOME NOSURPRISE_SHOCK")

        if Estimation_Select.keys == 'right' and Outcome == 0:
            el_tracker.sendMessage("POST_CHOICE_ISI OUTCOME SURPRISE_NOSHOCK")
      End Routine:
        thisExp.addData('PostISI_Start_Time', time_trialBegin)
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
  Routine Instructions_4
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    CodeComponent Box18_2
      Code Type = Auto->JS
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      Each Frame:
        grayBox.draw()
    CodeComponent Text_code
      Code Type = Auto->JS
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      Begin Experiment:
        from psychopy import visual, core, event

        # One text stim per color segment
        text_ISI_instr5 = visual.TextStim(
            win,
            text="There will be a break halfway (~14 mins).",
            color='black',
            pos=(-0.5, 0.15),  # adjust as needed
            height=0.03,
            anchorHoriz='left'
        )

        text_ISI_instr6 = visual.TextStim(
            win,
            text="You will now begin calibration (if appropriate).",
            color='black',
            pos=(-0.5, 0.0),  # adjust as needed
            height=0.03,
            anchorHoriz='left'
        )

        text_ISI_instr7 = visual.TextStim(
            win,
            text=f"Press ← or → to continue.",
            color='black',
            pos=(-0.5, -0.25),  # shift right to align after green text
            height=0.03,
            anchorHoriz='left'
        )
      Each Frame:
        text_ISI_instr5.draw()
        text_ISI_instr6.draw()
        text_ISI_instr7.draw()
    KeyboardComponent Instr_Key4
      allowedKeys = 'left','right','1','2'
      forceEndRoutine = True
      startVal [time (s)] = 0.2
      store = nothing
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  Routine Instructions_Final
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    CodeComponent Box18_3
      Code Type = Auto->JS
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      Each Frame:
        grayBox.draw()
    CodeComponent Text_code_4
      Code Type = Auto->JS
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      Begin Experiment:
        from psychopy import visual, core, event

        # One text stim per color segment

        text_ISI_instr8 = visual.TextStim(
            win,
            text="You will now begin the task.",
            color='black',
            pos=(-0.5, 0.25),  # adjust as needed
            height=0.03,
            anchorHoriz='left'
        )


        text_ISI_instr10 = visual.TextStim(
            win,
            text="Remember, left (←) means you think a shock will *not* occur. \n Right (→) means it will occur.",
            color='black',
            pos=(-0.5, 0.0),  # adjust as needed
            height=0.025,
            anchorHoriz='left'
        )

        text_ISI_instr9 = visual.TextStim(
            win,
            text=f"Press ← or → to continue.",
            color='black',
            pos=(-0.5, -0.25),  # shift right to align after green text
            height=0.03,
            anchorHoriz='left'
        )
      Each Frame:
        text_ISI_instr8.draw()
        text_ISI_instr10.draw()
        text_ISI_instr9.draw()
    KeyboardComponent Instr_Key5
      allowedKeys = 'left','right','1','2'
      forceEndRoutine = True
      startVal [time (s)] = 0.2
      store = nothing
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    CodeComponent Timer_0
      Code Type = Auto->JS
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      End Routine:
        time_trialEnd = globalClock.getTime()

        thisExp.addData('Experiment_Begin_Time', time_trialEnd)
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  Routine ScannerPrompt
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    TextComponent Scanner_wait_text
      color = Black
      letterHeight = 0.0375
      startVal [time (s)] = 0.0
      text = Waiting for the scanner...
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    KeyboardComponent Scanner_control
      allowedKeys = '5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent Scanner_timer
      Code Type = Auto->JS
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      Begin Experiment:
        fMRI_enabled = expInfo.get('fMRI_enabled', 'No')
      Begin Routine:
        time_ScannerPromptBegin = globalClock.getTime()
      End Routine:
        time_ScannerPromptEnd = globalClock.getTime()

        thisExp.addData('time_ScannerPromptBegin', time_ScannerPromptBegin)
        thisExp.addData('time_ScannerPromptEnd', time_ScannerPromptEnd)
    CodeComponent Routine_Skip
      Code Type = Auto->JS
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      Begin Experiment:
        fMRI_enabled = expInfo.get('fMRI_enabled', 'no')
      Begin Routine:
        if fMRI_enabled.lower() not in ['yes', 'y']:
            continueRoutine = False
    CodeComponent BoxScanPrompt
      Code Type = Auto->JS
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      Each Frame:
        grayBox.draw()
  Routine Shock_Calib_Looper
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    KeyboardComponent slider_keys
      allowedKeys = 'left','right', 'space', '1', '2'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = $'space' in slider_keys.keys
      store = nothing
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    SliderComponent pain_slider
      fillColor = -0.5, -0.5, -0.5
      forceEndRoutine = False
      granularity = 1
      initVal = 0
      labels = "0%", "10%", "20%", "30%", "40%", "50%", "60%", "70%", "80%", "90%", "100%"
      letterHeight = 0.02
      pos = (0, -0.2)
      saveStartStop = False
      size = (0.65, 0.02)
      startVal [time (s)] = 0.0
      stopVal [condition] = $'space' in slider_keys.keys
      styles = rating
      ticks = (0, 1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
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    CodeComponent Box_Shock_Cali_3
      Code Type = Auto->JS
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      Each Frame:
        grayBox.draw()
    CodeComponent Slider_Code
      Code Type = Auto->JS
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      Begin Routine:
        slider_keys.clearEvents()
      Each Frame:
        # Read keypresses from the Builder's Keyboard component
        keys = slider_keys.getKeys()

        for key in keys:
            if key.name in ['left', '1']:
                if pain_slider.markerPos is not None:
                    pain_slider.markerPos = max(pain_slider.markerPos - 1, 0)
                else:
                    pain_slider.markerPos = 0

            elif key.name in ['right', '2']:
                if pain_slider.markerPos is not None:
                    pain_slider.markerPos = min(pain_slider.markerPos + 1, 10)
                else:
                    pain_slider.markerPos = 1

            elif key.name in ['space', 'return']:
                rating = pain_slider.getRating()
                if rating is not None:
                    print(f"✅ Rating confirmed: {rating}")
                    thisExp.addData("pain_rating", rating)
                    continueRoutine = False  # End the routine
      End Routine:
        # Ensure the slider rating is set from markerPos when using keyboard control
        if pain_slider.rating is None and pain_slider.markerPos is not None:
            pain_slider.rating = pain_slider.markerPos

        thisExp.addData('pain_rating', pain_slider.rating)

        last_rating = pain_slider.rating
    CodeComponent Slider_Text
      Code Type = Auto->JS
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      Begin Routine:
        from psychopy import visual, core, event

        # One text stim per color segment
        text_sliderconf_1 = visual.TextStim(
            win,
            text="How strong was the stimulation?",
            color='black',
            pos=(-0.5, 0.15),  # adjust as needed
            height=0.0275,
            anchorHoriz='left'
        )

        # One text stim per color segment
        text_sliderconf_2 = visual.TextStim(
            win,
            text="Press ← or → to change rating. Press spacebar to confirm.",
            color='black',
            pos=(-0.5, 0.05),  # adjust as needed
            height=0.0275,
            anchorHoriz='left'
        )
      Each Frame:
        text_sliderconf_1.draw()
        text_sliderconf_2.draw()
    CodeComponent End_Loop
      Code Type = Auto->JS
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      End Routine:
        # Ensure rating is stored
        if pain_slider.rating is None and pain_slider.markerPos is not None:
            pain_slider.rating = pain_slider.markerPos

        thisExp.addData('pain_rating', pain_slider.rating)

        Last_rating = pain_slider.rating

        # Ensure rating is stored
        if pain_slider.rating is None and pain_slider.markerPos is not None:
            pain_slider.rating = pain_slider.markerPos

        thisExp.addData('pain_rating', pain_slider.rating)

        # Check stopping/looping conditions
        if pain_slider.rating >= 8:
            Cali_Loop.finished = True  # End loop as target achieved
    CodeComponent RoutSkip3
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        if StimCalEnabled.lower() not in ['yes', 'y']:
            continueRoutine = False
  Routine Shock_Calib_Instr
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    CodeComponent Box_Shock_Cali_1
      Code Type = Auto->JS
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      Each Frame:
        grayBox.draw()
    CodeComponent Shock_Cali_Instr_Text
      Code Type = Auto->JS
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      Begin Experiment:
        from psychopy import visual, core, event

        # One text stim per color segment
        text_shockcal_instr1 = visual.TextStim(
            win,
            text="We will now determine your stimulation threshold.",
            color='black',
            pos=(-0.5, 0.15),  # adjust as needed
            height=0.03,
            anchorHoriz='left'
        )

        text_shockcal_instr2 = visual.TextStim(
            win,
            text="Starting low, we will gradually increase the stimulation.",
            color='black',
            pos=(-0.5, 0.05),  # adjust as needed
            height=0.03,
            anchorHoriz='left'
        )

        text_shockcal_instr3 = visual.TextStim(
            win,
            text="We wish to understand your 80% stimulation threshold.",
            color='black',
            pos=(-0.5, -0.05),  # adjust as needed
            height=0.03,
            anchorHoriz='left'
        )

        text_shockcal_instr4 = visual.TextStim(
            win,
            text=f"Press ← or → to continue.",
            color='black',
            pos=(-0.5, -0.25),  # shift right to align after green text
            height=0.03,
            anchorHoriz='left'
        )
      Each Frame:
        text_shockcal_instr1.draw()
        text_shockcal_instr2.draw()
        text_shockcal_instr3.draw()
        text_shockcal_instr4.draw()
    KeyboardComponent Cali_Instr_Keyboard
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.2
      store = nothing
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  Routine Shock_Calib_Instr2
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    CodeComponent Box_Shock_Cali
      Code Type = Auto->JS
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      Each Frame:
        grayBox.draw()
    CodeComponent Shock_Cali_Instr_Text_2
      Code Type = Auto->JS
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      Begin Experiment:
        from psychopy import visual, core, event

        # One text stim per color segment
        text_shockcal_instr5 = visual.TextStim(
            win,
            text="On the next screen you will receive the first stimulation.",
            color='black',
            pos=(-0.5, 0.15),  # adjust as needed
            height=0.0275,
            anchorHoriz='left'
        )

        text_shockcal_instr6 = visual.TextStim(
            win,
            text="Please rate this from 0 - 100% using the slider provided. \n Press spacebar to confirm your rating.",
            color='black',
            pos=(-0.5, 0.05),  # adjust as needed
            height=0.0275,
            anchorHoriz='left'
        )

        text_shockcal_instr7 = visual.TextStim(
            win,
            text="We cannot proceed until certain about your 80% threshold.",
            color='black',
            pos=(-0.5, -0.05),  # adjust as needed
            height=0.0275,
            anchorHoriz='left'
        )

        text_shockcal_instr8 = visual.TextStim(
            win,
            text=f"Press ← or → to continue.",
            color='black',
            pos=(-0.5, -0.25),  # shift right to align after green text
            height=0.03,
            anchorHoriz='left'
        )
      Each Frame:
        text_shockcal_instr5.draw()
        text_shockcal_instr6.draw()
        text_shockcal_instr7.draw()
        text_shockcal_instr8.draw()
    KeyboardComponent Cali_Instr_Keyboard_2
      allowedKeys = 'left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.2
      store = nothing
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  Routine Pre_Shock_ISI_Calib
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    TextComponent Pre_Cali_ISI
      color = -0.7500, -0.7500, -0.7500
      letterHeight = 0.125
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    CodeComponent Box_Cali_Pre
      Code Type = Auto->JS
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      Each Frame:
        grayBox.draw()
    CodeComponent RoutSkip1
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        if StimCalEnabled.lower() not in ['yes', 'y']:
            Cali_Loop.finished = True
            continueRoutine = False
  Routine Shock_ISI_Calib
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    TextComponent Calib_Shock_Cross
      color = -1.0000, -0.6706, -0.3490
      letterHeight = 0.125
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = +
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    CodeComponent Stimulation_Calib_Code
      Code Type = Auto->JS
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      Before Experiment:
        import os
        import sys
        import ctypes

        # --- Step 1: Set paths ---
        ds8r_dir = r"C:\Users\PERLadmin\Desktop\DOREA_Task_Battery\PAL\DS8R"
        dll_path = os.path.join(ds8r_dir, "D128RProxy.dll")

        # --- Step 2: Load the DLL manually ---
        try:
            ctypes.WinDLL(dll_path)
            print("✅ DLL loaded manually.")
        except Exception as e:
            print(f"❌ DLL load failed: {e}")

        # --- Step 3: Update working directory and sys.path ---
        os.chdir(ds8r_dir)
        sys.path.append(ds8r_dir)

        # --- Step 4: Import DS8R module ---
        from ds8r import DS8R
        print("✅ DS8R module imported successfully.")

        import threading
      Begin Experiment:
        last_demand = None
        last_pulse_width = None

        ctl = DS8R(
            demand=10,  # adjust as needed
            pulse_width=100,   # adjust as needed
            enabled=0,
            dwell=10,
            mode=1,
            polarity=1,
            source=1,
        )

        def safe_run():
            try:
                ctl.run()
            except Exception as e:
                print(f"DS8R trigger error: {e}")
      Begin Routine:
        ctl.demand = int(Set_Demand)
        ctl.pulse_width = int(Set_Width)
        ctl.enabled = 1  # Re-arm device

        trigger_thread = threading.Thread(target=safe_run)
        trigger_thread.start()
        trigger_thread.join(timeout=2.0)  # 2-second timeout

        if trigger_thread.is_alive():
            print("⚠️ DS8R trigger timed out!")
            # Optionally kill the thread or reset ctl here

        last_demand = Set_Demand
        last_pulse_width = Set_Width
    CodeComponent Box_Cali_Shock
      Code Type = Auto->JS
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      Each Frame:
        grayBox.draw()
    CodeComponent RoutSkip2
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        if StimCalEnabled.lower() not in ['yes', 'y']:
            continueRoutine = False
  Routine Pre_Shock_ISI_Cali_Check_1
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    TextComponent Pre_Cali_ISI_2
      color = -0.7500, -0.7500, -0.7500
      letterHeight = 0.125
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    CodeComponent Box_Cali_Pre_2
      Code Type = Auto->JS
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      Each Frame:
        grayBox.draw()
    CodeComponent RoutSkip5
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        if StimCalEnabled.lower() not in ['yes', 'y']:
            FirstLoopPass.finished = True  # End loop as target achieved
            continueRoutine = False
  Routine Shock_ISI_Post_Check_1
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    TextComponent Calib_Shock_Cross_2
      color = -1.0000, -0.6706, -0.3490
      letterHeight = 0.125
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = +
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    CodeComponent Stimulation_Calib_Code_2
      Code Type = Auto->JS
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      Before Experiment:
        import os
        import sys
        import ctypes

        # --- Step 1: Set paths ---
        ds8r_dir = r"C:\Users\PERLadmin\Desktop\DOREA_Task_Battery\PAL\DS8R"
        dll_path = os.path.join(ds8r_dir, "D128RProxy.dll")

        # --- Step 2: Load the DLL manually ---
        try:
            ctypes.WinDLL(dll_path)
            print("✅ DLL loaded manually.")
        except Exception as e:
            print(f"❌ DLL load failed: {e}")

        # --- Step 3: Update working directory and sys.path ---
        os.chdir(ds8r_dir)
        sys.path.append(ds8r_dir)

        # --- Step 4: Import DS8R module ---
        from ds8r import DS8R
        print("✅ DS8R module imported successfully.")

        import threading
      Begin Experiment:
        ctl = DS8R(
            demand=10,  # adjust as needed
            pulse_width=100,   # adjust as needed
            enabled=0,
            dwell=10,
            mode=1,
            polarity=1,
            source=1,
        )

        def safe_run():
            try:
                ctl.run()
            except Exception as e:
                print(f"DS8R trigger error: {e}")
      Begin Routine:
        ctl.demand = last_demand
        ctl.pulse_width = last_pulse_width
        ctl.enabled = 1  # Re-arm device

        trigger_thread = threading.Thread(target=safe_run)
        trigger_thread.start()
        trigger_thread.join(timeout=2.0)  # 2-second timeout

        if trigger_thread.is_alive():
            print("⚠️ DS8R trigger timed out!")
            # Optionally kill the thread or reset ctl here
    CodeComponent Box_Cali_Shock_2
      Code Type = Auto->JS
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      Each Frame:
        grayBox.draw()
    CodeComponent RoutSkip6
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        if StimCalEnabled.lower() not in ['yes', 'y']:
            continueRoutine = False
  Routine Shock_Calib_Looper_2
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    KeyboardComponent slider_keys2
      allowedKeys = 'left','right', 'space', '1', '2'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = $'space' in slider_keys2.keys
      store = nothing
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    SliderComponent pain_slider2
      fillColor = -0.5, -0.5, -0.5
      forceEndRoutine = False
      granularity = 1
      initVal = 0
      labels = "0%", "10%", "20%", "30%", "40%", "50%", "60%", "70%", "80%", "90%", "100%"
      letterHeight = 0.02
      pos = (0, -0.2)
      saveStartStop = False
      size = (0.65, 0.02)
      startVal [time (s)] = 0.0
      stopVal [condition] = $'space' in slider_keys2.keys
      styles = rating
      ticks = (0, 1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
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    CodeComponent Box_Shock_Cali_4
      Code Type = Auto->JS
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      Each Frame:
        grayBox.draw()
    CodeComponent Slider_Code_2
      Code Type = Auto->JS
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      Begin Routine:
        slider_keys2.clearEvents()
      Each Frame:
        # Read keypresses from the Builder's Keyboard component
        keys = slider_keys2.getKeys()

        for key in keys:
            if key.name in ['left', '1']:
                if pain_slider2.markerPos is not None:
                    pain_slider2.markerPos = max(pain_slider2.markerPos - 1, 0)
                else:
                    pain_slider2.markerPos = 0

            elif key.name in ['right', '2']:
                if pain_slider2.markerPos is not None:
                    pain_slider2.markerPos = min(pain_slider2.markerPos + 1, 10)
                else:
                    pain_slider2.markerPos = 1

            elif key.name in ['space', 'return']:
                rating = pain_slider2.getRating()
                if rating is not None:
                    print(f"✅ Rating confirmed: {rating}")
                    thisExp.addData("pain_rating2", rating)
                    continueRoutine = False  # End the routine
    CodeComponent Slider_Text_2
      Code Type = Auto->JS
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      Begin Routine:
        from psychopy import visual, core, event

        # One text stim per color segment
        text_sliderconf_1 = visual.TextStim(
            win,
            text="How strong was the stimulation?",
            color='black',
            pos=(-0.5, 0.15),  # adjust as needed
            height=0.0275,
            anchorHoriz='left'
        )

        # One text stim per color segment
        text_sliderconf_2 = visual.TextStim(
            win,
            text="Press ← or → to change rating. Press spacebar to confirm.",
            color='black',
            pos=(-0.5, 0.05),  # adjust as needed
            height=0.0275,
            anchorHoriz='left'
        )
      Each Frame:
        text_sliderconf_1.draw()
        text_sliderconf_2.draw()
    CodeComponent End_Loop_2
      Code Type = Auto->JS
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      End Routine:
        # Ensure rating is stored
        if pain_slider2.rating is None and pain_slider2.markerPos is not None:
            pain_slider2.rating = pain_slider2.markerPos

        thisExp.addData('pain_rating', pain_slider2.rating)

        if pain_slider2.rating == 8:
            FirstLoopPass.finished = True
    CodeComponent RoutSkip7
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        if StimCalEnabled.lower() not in ['yes', 'y']:
            continueRoutine = False
  Routine Loop_Checkpoint
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    CodeComponent Checkpoint_code
      Code Type = Auto->JS
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      End Routine:
        # Check stopping/looping conditions
        if pain_slider.rating == 8:
            Checkpoint.finished = True  # End loop as target achieved
    CodeComponent RoutSkip4
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        if StimCalEnabled.lower() not in ['yes', 'y']:
            Checkpoint.finished = True  # End loop as target achieved
            continueRoutine = False
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  Routine Pre_Shock_ISI_Cali_Check_2
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    TextComponent Pre_Cali_ISI_3
      color = -0.7500, -0.7500, -0.7500
      letterHeight = 0.125
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    CodeComponent Box_Cali_Pre_3
      Code Type = Auto->JS
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      Each Frame:
        grayBox.draw()
    CodeComponent RoutSkip8
      Code Type = Auto->JS
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      Begin Routine:
        if StimCalEnabled.lower() not in ['yes', 'y']:
            SecondLoopPass.finished = True  # End loop as target achieved
            continueRoutine = False
  Routine Shock_ISI_Post_Check_2
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    TextComponent Calib_Shock_Cross_3
      color = -1.0000, -0.6706, -0.3490
      letterHeight = 0.125
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = +
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    CodeComponent Stimulation_Calib_Code_3
      Code Type = Auto->JS
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      Before Experiment:
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      Begin Experiment:
        ctl = DS8R(
            demand=10,  # adjust as needed
            pulse_width=100,   # adjust as needed
            enabled=0,
            dwell=10,
            mode=1,
            polarity=1,
            source=1,
        )

        def safe_run():
            try:
                ctl.run()
            except Exception as e:
                print(f"DS8R trigger error: {e}")
      Begin Routine:
        ctl.demand = last_demand
        ctl.pulse_width = last_pulse_width
        ctl.enabled = 1  # Re-arm device

        trigger_thread = threading.Thread(target=safe_run)
        trigger_thread.start()
        trigger_thread.join(timeout=2.0)  # 2-second timeout

        if trigger_thread.is_alive():
            print("⚠️ DS8R trigger timed out!")
    CodeComponent Box_Cali_Shock_3
      Code Type = Auto->JS
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      Each Frame:
        grayBox.draw()
    CodeComponent RoutSkip9
      Code Type = Auto->JS
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      Begin Routine:
        if StimCalEnabled.lower() not in ['yes', 'y']:
            continueRoutine = False
  Routine Shock_Calib_Looper_3
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    KeyboardComponent slider_keys3
      allowedKeys = 'left','right', 'space', '1', '2'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = $'space' in slider_keys3.keys
      store = nothing
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    SliderComponent pain_slider3
      fillColor = -0.5, -0.5, -0.5
      forceEndRoutine = False
      granularity = 1
      initVal = 0
      labels = "0%", "10%", "20%", "30%", "40%", "50%", "60%", "70%", "80%", "90%", "100%"
      letterHeight = 0.02
      pos = (0, -0.2)
      saveStartStop = False
      size = (0.65, 0.02)
      startVal [time (s)] = 0.0
      stopVal [condition] = $'space' in slider_keys3.keys
      styles = rating
      ticks = (0, 1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
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    CodeComponent Box_Shock_Cali_5
      Code Type = Auto->JS
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      Each Frame:
        grayBox.draw()
    CodeComponent Slider_Code_3
      Code Type = Auto->JS
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      Begin Routine:
        slider_keys2.clearEvents()
      Each Frame:
        # Read keypresses from the Builder's Keyboard component
        keys = slider_keys3.getKeys()

        for key in keys:
            if key.name in ['left', '1']:
                if pain_slider3.markerPos is not None:
                    pain_slider3.markerPos = max(pain_slider3.markerPos - 1, 0)
                else:
                    pain_slider3.markerPos = 0

            elif key.name in ['right', '2']:
                if pain_slider3.markerPos is not None:
                    pain_slider3.markerPos = min(pain_slider3.markerPos + 1, 10)
                else:
                    pain_slider3.markerPos = 1

            elif key.name in ['space', 'return']:
                rating = pain_slider3.getRating()
                if rating is not None:
                    print(f"✅ Rating confirmed: {rating}")
                    thisExp.addData("pain_rating3", rating)
                    continueRoutine = False  # End the routine
    CodeComponent Slider_Text_3
      Code Type = Auto->JS
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      Begin Routine:
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      Each Frame:
        text_sliderconf_1.draw()
        text_sliderconf_2.draw()
    CodeComponent End_Loop_3
      Code Type = Auto->JS
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      End Routine:
        # Ensure rating is stored
        if pain_slider3.rating is None and pain_slider3.markerPos is not None:
            pain_slider3.rating = pain_slider3.markerPos

        thisExp.addData('pain_rating3', pain_slider3.rating)

        if pain_slider3.rating == 8:
            SecondLoopPass.finished = True

        thisExp.addData('first_cali_final_demand', last_demand)
    CodeComponent RoutSkip10
      Code Type = Auto->JS
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      Begin Routine:
        if StimCalEnabled.lower() not in ['yes', 'y']:
            continueRoutine = False
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
  Routine Pre_Shock_ISI_Calib_2
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    TextComponent Pre_Cali_ISI_5
      color = -0.7500, -0.7500, -0.7500
      letterHeight = 0.125
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    CodeComponent Box_Cali_Pre_5
      Code Type = Auto->JS
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      Each Frame:
        grayBox.draw()
    CodeComponent RoutSkip1_3
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        if StimCalEnabled.lower() not in ['yes', 'y']:
            CaliLoop2.finished = True
            continueRoutine = False
  Routine Shock_ISI_Calib_2
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    TextComponent Calib_Shock_Cross_4
      color = -1.0000, -0.6706, -0.3490
      letterHeight = 0.125
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = +
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    CodeComponent Stimulation_Calib_Code_4
      Code Type = Auto->JS
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      Before Experiment:
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      Begin Experiment:
        last_demand = None
        last_pulse_width = None

        ctl = DS8R(
            demand=10,  # adjust as needed
            pulse_width=100,   # adjust as needed
            enabled=0,
            dwell=10,
            mode=1,
            polarity=1,
            source=1,
        )

        def safe_run():
            try:
                ctl.run()
            except Exception as e:
                print(f"DS8R trigger error: {e}")
      Begin Routine:
        ctl.demand = int(Set_Demand)
        ctl.pulse_width = int(Set_Width)
        ctl.enabled = 1  # Re-arm device

        trigger_thread = threading.Thread(target=safe_run)
        trigger_thread.start()
        trigger_thread.join(timeout=2.0)  # 2-second timeout

        if trigger_thread.is_alive():
            print("⚠️ DS8R trigger timed out!")
            # Optionally kill the thread or reset ctl here

        last_demand = Set_Demand
        last_pulse_width = Set_Width
    CodeComponent Box_Cali_Shock_4
      Code Type = Auto->JS
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      Each Frame:
        grayBox.draw()
    CodeComponent RoutSkip2_2
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        if StimCalEnabled.lower() not in ['yes', 'y']:
            continueRoutine = False
  Routine Shock_Calib_Looper_5
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    KeyboardComponent slider_keys_2
      allowedKeys = 'left','right', 'space', '1', '2'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = $'space' in slider_keys_2.keys
      store = nothing
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    SliderComponent pain_slider_2
      fillColor = -0.5, -0.5, -0.5
      forceEndRoutine = False
      granularity = 1
      initVal = 0
      labels = "0%", "10%", "20%", "30%", "40%", "50%", "60%", "70%", "80%", "90%", "100%"
      letterHeight = 0.02
      pos = (0, -0.2)
      saveStartStop = False
      size = (0.65, 0.02)
      startVal [time (s)] = 0.0
      stopVal [condition] = $'space' in slider_keys_2.keys
      styles = rating
      ticks = (0, 1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
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    CodeComponent Box_Shock_Cali_7
      Code Type = Auto->JS
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      Each Frame:
        grayBox.draw()
    CodeComponent Slider_Code_5
      Code Type = Auto->JS
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      Begin Routine:
        slider_keys.clearEvents()
      Each Frame:
        # Read keypresses from the Builder's Keyboard component
        keys = slider_keys_2.getKeys()

        for key in keys:
            if key.name in ['left', '1']:
                if pain_slider_2.markerPos is not None:
                    pain_slider_2.markerPos = max(pain_slider_2.markerPos - 1, 0)
                else:
                    pain_slider_2.markerPos = 0

            elif key.name in ['right', '2']:
                if pain_slider_2.markerPos is not None:
                    pain_slider_2.markerPos = min(pain_slider_2.markerPos + 1, 10)
                else:
                    pain_slider_2.markerPos = 1

            elif key.name in ['space', 'return']:
                rating = pain_slider_2.getRating()
                if rating is not None:
                    print(f"✅ Rating confirmed: {rating}")
                    thisExp.addData("pain_rating", rating)
                    continueRoutine = False  # End the routine
      End Routine:
        # Ensure the slider rating is set from markerPos when using keyboard control
        if pain_slider_2.rating is None and pain_slider_2.markerPos is not None:
            pain_slider_2.rating = pain_slider_2.markerPos

        thisExp.addData('pain_rating', pain_slider_2.rating)

        last_rating = pain_slider_2.rating
    CodeComponent Slider_Text_5
      Code Type = Auto->JS
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      Begin Routine:
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      Each Frame:
        text_sliderconf_1.draw()
        text_sliderconf_2.draw()
    CodeComponent End_Loop_5
      Code Type = Auto->JS
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      End Routine:
        # Ensure rating is stored
        if pain_slider_2.rating is None and pain_slider_2.markerPos is not None:
            pain_slider_2.rating = pain_slider_2.markerPos

        thisExp.addData('pain_rating', pain_slider_2.rating)

        Last_rating = pain_slider.rating

        # Ensure rating is stored
        if pain_slider_2.rating is None and pain_slider.markerPos is not None:
            pain_slider_2.rating = pain_slider_2.markerPos

        thisExp.addData('pain_rating', pain_slider_2.rating)

        # Check stopping/looping conditions
        if pain_slider_2.rating >= 8:
            CaliLoop2.finished = True  # End loop as target achieved
    CodeComponent RoutSkip3_2
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        if StimCalEnabled.lower() not in ['yes', 'y']:
            continueRoutine = False
  Routine Loop_Checkpoint_2
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    CodeComponent Checkpoint_code_2
      Code Type = Auto->JS
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      End Routine:
        # Check stopping/looping conditions
        if pain_slider.rating == 8:
            Checkpoint2.finished = True  # End loop as target achieved
    CodeComponent RoutSkip4_2
      Code Type = Auto->JS
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      Begin Routine:
        if StimCalEnabled.lower() not in ['yes', 'y']:
            Checkpoint2.finished = True  # End loop as target achieved
            continueRoutine = False
  Routine Pre_Shock_ISI_Cali_Check_1_2
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    TextComponent Pre_Cali_ISI_6
      color = -0.7500, -0.7500, -0.7500
      letterHeight = 0.125
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    CodeComponent Box_Cali_Pre_6
      Code Type = Auto->JS
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      Each Frame:
        grayBox.draw()
    CodeComponent RoutSkip5_2
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        if StimCalEnabled.lower() not in ['yes', 'y']:
            FirstLoopPass2.finished = True  # End loop as target achieved
            continueRoutine = False
  Routine Shock_ISI_Post_Check_1_2
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    TextComponent Calib_Shock_Cross_5
      color = -1.0000, -0.6706, -0.3490
      letterHeight = 0.125
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = +
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    CodeComponent Stimulation_Calib_Code_5
      Code Type = Auto->JS
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      Before Experiment:
        import os
        import sys
        import ctypes

        # --- Step 1: Set paths ---
        ds8r_dir = r"C:\Users\PERLadmin\Desktop\DOREA_Task_Battery\PAL\DS8R"
        dll_path = os.path.join(ds8r_dir, "D128RProxy.dll")

        # --- Step 2: Load the DLL manually ---
        try:
            ctypes.WinDLL(dll_path)
            print("✅ DLL loaded manually.")
        except Exception as e:
            print(f"❌ DLL load failed: {e}")

        # --- Step 3: Update working directory and sys.path ---
        os.chdir(ds8r_dir)
        sys.path.append(ds8r_dir)

        # --- Step 4: Import DS8R module ---
        from ds8r import DS8R
        print("✅ DS8R module imported successfully.")

        import threading
      Begin Experiment:
        ctl = DS8R(
            demand=10,  # adjust as needed
            pulse_width=100,   # adjust as needed
            enabled=0,
            dwell=10,
            mode=1,
            polarity=1,
            source=1,
        )

        def safe_run():
            try:
                ctl.run()
            except Exception as e:
                print(f"DS8R trigger error: {e}")
      Begin Routine:
        ctl.demand = last_demand
        ctl.pulse_width = last_pulse_width
        ctl.enabled = 1  # re-arm the device

        trigger_thread = threading.Thread(target=safe_run)
        trigger_thread.start()
        trigger_thread.join(timeout=2.0)  # 2-second timeout

        if trigger_thread.is_alive():
            print("⚠️ DS8R trigger timed out!")
            # Optionally kill the thread or reset ctl here
    CodeComponent Box_Cali_Shock_5
      Code Type = Auto->JS
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      Each Frame:
        grayBox.draw()
    CodeComponent RoutSkip6_2
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        if StimCalEnabled.lower() not in ['yes', 'y']:
            continueRoutine = False
  Routine Shock_Calib_Looper_6
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    KeyboardComponent slider_keys2_2
      allowedKeys = 'left','right', 'space', '1', '2'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = $'space' in slider_keys2_2.keys
      store = nothing
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    SliderComponent pain_slider2_2
      fillColor = -0.5, -0.5, -0.5
      forceEndRoutine = False
      granularity = 1
      initVal = 0
      labels = "0%", "10%", "20%", "30%", "40%", "50%", "60%", "70%", "80%", "90%", "100%"
      letterHeight = 0.02
      pos = (0, -0.2)
      saveStartStop = False
      size = (0.65, 0.02)
      startVal [time (s)] = 0.0
      stopVal [condition] = $'space' in slider_keys2_2.keys
      styles = rating
      ticks = (0, 1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
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    CodeComponent Box_Shock_Cali_8
      Code Type = Auto->JS
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      Each Frame:
        grayBox.draw()
    CodeComponent Slider_Code_6
      Code Type = Auto->JS
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      Begin Routine:
        slider_keys2.clearEvents()
      Each Frame:
        # Read keypresses from the Builder's Keyboard component
        keys = slider_keys2_2.getKeys()

        for key in keys:
            if key.name in ['left', '1']:
                if pain_slider2_2.markerPos is not None:
                    pain_slider2_2.markerPos = max(pain_slider2_2.markerPos - 1, 0)
                else:
                    slider_keys2_2.markerPos = 0

            elif key.name in ['right', '2']:
                if pain_slider2_2.markerPos is not None:
                    pain_slider2_2.markerPos = min(pain_slider2_2.markerPos + 1, 10)
                else:
                    slider_keys2_2.markerPos = 1

            elif key.name in ['space', 'return']:
                rating = pain_slider2_2.getRating()
                if rating is not None:
                    print(f"✅ Rating confirmed: {rating}")
                    thisExp.addData("pain_rating2", rating)
                    continueRoutine = False  # End the routine
    CodeComponent Slider_Text_6
      Code Type = Auto->JS
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      Begin Routine:
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      Each Frame:
        text_sliderconf_1.draw()
        text_sliderconf_2.draw()
    CodeComponent End_Loop_6
      Code Type = Auto->JS
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      End Routine:
        # Ensure rating is stored
        if pain_slider2_2.rating is None and pain_slider2_2.markerPos is not None:
            pain_slider2_2.rating = pain_slider2_2.markerPos

        thisExp.addData('pain_rating', pain_slider2_2.rating)

        if pain_slider2_2.rating == 8:
            FirstLoopPass2.finished = True
    CodeComponent RoutSkip7_2
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        if StimCalEnabled.lower() not in ['yes', 'y']:
            continueRoutine = False
  Routine Pre_Shock_ISI_Check_2_2
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    TextComponent Pre_Cali_ISI_7
      color = -0.7500, -0.7500, -0.7500
      letterHeight = 0.125
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    CodeComponent Box_Cali_Pre_7
      Code Type = Auto->JS
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      Each Frame:
        grayBox.draw()
    CodeComponent RoutSkip8_2
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        if StimCalEnabled.lower() not in ['yes', 'y']:
            SecondLoopPass.finished = True  # End loop as target achieved
            continueRoutine = False
  Routine Shock_ISI_Post_Check_2_2
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    TextComponent Calib_Shock_Cross_6
      color = -1.0000, -0.6706, -0.3490
      letterHeight = 0.125
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = +
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    CodeComponent Stimulation_Calib_Code_6
      Code Type = Auto->JS
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      Before Experiment:
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      Begin Experiment:
        ctl = DS8R(
            demand=10,  # adjust as needed
            pulse_width=100,   # adjust as needed
            enabled=0,
            dwell=10,
            mode=1,
            polarity=1,
            source=1,
        )

        def safe_run():
            try:
                ctl.run()
            except Exception as e:
                print(f"DS8R trigger error: {e}")
      Begin Routine:
        ctl.demand = last_demand
        ctl.pulse_width = last_pulse_width
        ctl.enabled = 1  # Re-arm device

        trigger_thread = threading.Thread(target=safe_run)
        trigger_thread.start()
        trigger_thread.join(timeout=2.0)  # 2-second timeout

        if trigger_thread.is_alive():
            print("⚠️ DS8R trigger timed out!")
            # Optionally kill the thread or reset ctl here
    CodeComponent Box_Cali_Shock_6
      Code Type = Auto->JS
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      Each Frame:
        grayBox.draw()
    CodeComponent RoutSkip9_2
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        if StimCalEnabled.lower() not in ['yes', 'y']:
            continueRoutine = False
  Routine Shock_Calib_Looper_7
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    KeyboardComponent slider_keys3_2
      allowedKeys = 'left','right', 'space', '1', '2'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = $'space' in slider_keys3_2.keys
      store = nothing
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    SliderComponent pain_slider3_2
      fillColor = -0.5, -0.5, -0.5
      forceEndRoutine = False
      granularity = 1
      initVal = 0
      labels = "0%", "10%", "20%", "30%", "40%", "50%", "60%", "70%", "80%", "90%", "100%"
      letterHeight = 0.02
      pos = (0, -0.2)
      saveStartStop = False
      size = (0.65, 0.02)
      startVal [time (s)] = 0.0
      stopVal [condition] = $'space' in slider_keys3_2.keys
      styles = rating
      ticks = (0, 1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
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    CodeComponent Box_Shock_Cali_9
      Code Type = Auto->JS
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      Each Frame:
        grayBox.draw()
    CodeComponent Slider_Code_7
      Code Type = Auto->JS
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      Begin Routine:
        slider_keys2.clearEvents()
      Each Frame:
        # Read keypresses from the Builder's Keyboard component
        keys = slider_keys3_2.getKeys()

        for key in keys:
            if key.name in ['left', '1']:
                if pain_slider3_2.markerPos is not None:
                    pain_slider3_2.markerPos = max(pain_slider3_2.markerPos - 1, 0)
                else:
                    pain_slider3_2.markerPos = 0

            elif key.name in ['right', '2']:
                if pain_slider3_2.markerPos is not None:
                    pain_slider3_2.markerPos = min(pain_slider3_2.markerPos + 1, 10)
                else:
                    pain_slider3_2.markerPos = 1

            elif key.name in ['space', 'return']:
                rating = pain_slider3_2.getRating()
                if rating is not None:
                    print(f"✅ Rating confirmed: {rating}")
                    thisExp.addData("pain_rating3", rating)
                    continueRoutine = False  # End the routine
    CodeComponent Slider_Text_7
      Code Type = Auto->JS
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      Begin Routine:
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      Each Frame:
        text_sliderconf_1.draw()
        text_sliderconf_2.draw()
    CodeComponent End_Loop_7
      Code Type = Auto->JS
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      End Routine:
        # Ensure rating is stored
        if pain_slider3_2.rating is None and pain_slider3_2.markerPos is not None:
            pain_slider3_2.rating = pain_slider3_2.markerPos

        thisExp.addData('pain_rating3', pain_slider3_2.rating)

        if pain_slider3_2.rating == 8:
            SecondLoopPass2.finished = True

        thisExp.addData('second_cali_final_demand', last_demand)
    CodeComponent RoutSkip10_2
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        if StimCalEnabled.lower() not in ['yes', 'y']:
            continueRoutine = False
  Routine Recal_Instr
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    CodeComponent Box_Recal_Instr
      Code Type = Auto->JS
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      Each Frame:
        grayBox.draw()
    TextComponent Recal_Instr_Text
      color = black
      letterHeight = 0.025
      startVal [time (s)] = 0.0
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      text:
        You will now recalibrate your stimulation threshold.

        As before, please rate from 0 - 100%.

        We will proceed once we understand your 80% threshold.


        Press ← or → to continue.
    KeyboardComponent Recal_Procced_Keys
      allowedKeys = 'left','right','1', '2'
      forceEndRoutine = True
      startVal [time (s)] = 0.2
      store = nothing
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    CodeComponent Skip_Recab
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        if StimCalEnabled.lower() not in ['yes', 'y']:
            continueRoutine = False
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  Routine EyeTracker_Cali
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    CameraSetup CameraSetup_1 plugin="psychopy-eyelink"
      backgroundColor = win.color
      calibrationFilenames = 'qbeep.wav','type.wav','error.wav'
      calibrationSounds = defaults
      calibrationType = HV5
      disabled = True
      foregroundColor = (1,1,1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.01
      syncScreenRefresh = False
      targetSize = 24
      targetType = circle
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    CodeComponent EyeLink_Cali
      Code Type = Auto->JS
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      End Experiment:
        # This End Experiment tab of the elConnect component calls the
        # terminate_task helper function to get the EDF file and close the connection
        # to the Host PC

        # Disconnect, download the EDF file, then terminate the task
        terminate_task(genv,edf_file,session_folder,session_identifier)
      End Routine:
        el_tracker.doTrackerSetup()
  Routine EyeL_calib_instr
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    CodeComponent Box15
      Code Type = Auto->JS
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      Each Frame:
        grayBox.draw()
    CodeComponent EyeCal_Instr
      Code Type = Auto->JS
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      Begin Experiment:
        from psychopy import visual, core, event

        # One text stim per color segment
        text_eyecal_instr1 = visual.TextStim(
            win,
            text="On the next screen, we will calibrate the eyetracker.",
            color='black',
            pos=(-0.5, 0.10),  # adjust as needed
            height=0.0275,
            anchorHoriz='left'
        )



        text_eyecal_instr3 = visual.TextStim(
            win,
            text=f"Press ← or → to continue.",
            color='black',
            pos=(-0.5, -0.25),  # shift right to align after green text
            height=0.03,
            anchorHoriz='left'
        )
      Each Frame:
        text_eyecal_instr1.draw()
        text_eyecal_instr3.draw()
    KeyboardComponent EyeT_Recal_Prompt
      allowedKeys = 'left','right','1', '2'
      forceEndRoutine = True
      startVal [time (s)] = 0.1
      store = nothing
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  Routine Instructions_Final_2
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    CodeComponent Box18_4
      Code Type = Auto->JS
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      Each Frame:
        grayBox.draw()
    CodeComponent Text_code_5
      Code Type = Auto->JS
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      Begin Experiment:
        from psychopy import visual, core, event

        # One text stim per color segment

        text_ISI_instr50 = visual.TextStim(
            win,
            text="You will now return to the task.",
            color='black',
            pos=(-0.5, 0.1),  # adjust as needed
            height=0.03,
            anchorHoriz='left'
        )

        text_ISI_instr51 = visual.TextStim(
            win,
            text="This is the final half.",
            color='black',
            pos=(-0.5, 0.0),  # adjust as needed
            height=0.03,
            anchorHoriz='left'
        )

        text_ISI_instr9 = visual.TextStim(
            win,
            text=f"Press ← or → to continue.",
            color='black',
            pos=(-0.5, -0.25),  # shift right to align after green text
            height=0.03,
            anchorHoriz='left'
        )
      Each Frame:
        text_ISI_instr50.draw()
        text_ISI_instr51.draw()
        text_ISI_instr9.draw()
    KeyboardComponent Instr_Key5_2
      allowedKeys = 'left','right','1','2'
      forceEndRoutine = True
      startVal [time (s)] = 0.2
      store = nothing
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    CodeComponent Timer
      Code Type = Auto->JS
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      End Routine:
        time_trialEnd = globalClock.getTime()

        thisExp.addData('Experiment_Begin_Time', time_trialEnd)
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
  Routine Begin_Recording
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    StartRecording StartRecord plugin="psychopy-eyelink"
      disabled = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
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    CodeComponent Begin_Recording_Eyetracker_1
      Code Type = Auto->JS
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      Begin Routine:
        el_tracker.sendMessage("RECORDING_START_HALF_1")
        el_tracker.startRecording(1, 1, 1, 1)
        pylink.pumpDelay(100)
  Routine End_Recording
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    CodeComponent Stop_Recording
      Code Type = Auto->JS
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      End Routine:
        # This End Routine tab of the elStopRecord component stops eye tracker recording

        core.wait(0.5)

        # stop recording; add 100 msec to catch final events before stopping
        el_tracker.sendMessage("RECORDING_END_HALF_1")
        pylink.pumpDelay(100)
        el_tracker.stopRecording()

        core.wait(0.5)

        # Optional clean-up on the Host display
        el_tracker.sendCommand('clear_screen 0')             # Clear host display
        el_tracker.sendMessage('!V CLEAR 128 128 128')       # Clear overlay in Data Viewer

        continueRoutine = False
    TextComponent Blank_Text_End
      disabled = True
      letterHeight = 0.05
      startVal [time (s)] = 0.5
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    KeyboardComponent key_resp
      allowedKeys = 'left','right','1','2'
      disabled = True
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1
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
  Routine Begin_Recording_2
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    StartRecording StartRecord_2 plugin="psychopy-eyelink"
      disabled = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
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    CodeComponent Begin_Recording_Eyetracker
      Code Type = Auto->JS
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      Begin Routine:
        el_tracker.sendMessage("RECORDING_START_HALF_2")
        el_tracker.startRecording(1, 1, 1, 1)
        pylink.pumpDelay(100)
  Routine End_Recording_2
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    StopRecording StopRecord_2 plugin="psychopy-eyelink"
      disabled = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      syncScreenRefresh = False
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    KeyboardComponent key_resp_2
      allowedKeys = 'left','right','space','1','2'
      disabled = True
      forceEndRoutine = True
      startVal [time (s)] = 1
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    CodeComponent End_Recording_3
      Code Type = Auto->JS
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      End Routine:
        # This End Routine tab of the elStopRecord component stops eye tracker recording

        core.wait(0.5)

        # stop recording; add 100 msec to catch final events before stopping
        el_tracker.sendMessage("RECORDING_END_HALF_2")
        pylink.pumpDelay(100)
        el_tracker.stopRecording()

        core.wait(0.5)

        # Optional clean-up on the Host display
        el_tracker.sendCommand('clear_screen 0')             # Clear host display
        el_tracker.sendMessage('!V CLEAR 128 128 128')       # Clear overlay in Data Viewer

        continueRoutine = False
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  Routine Pre_Block_ISI
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    TextComponent ISI_Pre
      color = -0.7500, -0.7500, -0.7500
      letterHeight = 0.125
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = +
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    CodeComponent Pre_Box
      Code Type = Auto->JS
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      Each Frame:
        grayBox.draw()
    CodeComponent Pre_Timer
      Code Type = Auto->JS
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      Begin Routine:
        time_trialBegin = globalClock.getTime()
        el_tracker.sendMessage("PRE_ISI")
      End Routine:
        time_trialEnd = globalClock.getTime()

        thisExp.addData('Pre_ISI_Begin', time_trialBegin)
        thisExp.addData('Pre_ISI_End', time_trialEnd)
  Routine Main_Routine_ISI_H2_2
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    TextComponent Main_Task_H1_ISI_2
      color [set every repeat] = -0.7500, -0.7500, -0.7500
      letterHeight = 0.125
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Pre_ISI
      text [set every repeat] = +
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    CodeComponent Box1_2
      Code Type = Auto->JS
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      Each Frame:
        grayBox.draw()
    CodeComponent Timer_13
      Code Type = Auto->JS
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      Begin Routine:
        time_trialBegin = globalClock.getTime()

        el_tracker.sendMessage('!V POST_EVENT TRIAL_NO %s' % Trial_No)
        el_tracker.sendMessage('!V POST_EVENT CUE_TYPE %s' % Cue_Type)
        el_tracker.sendMessage('!V POST_EVENT CUE_PROB %s' % Cue_Prob)
        el_tracker.sendMessage('!V POST_EVENT REVERSAL_EVENT %s' % Reversal_event)
        el_tracker.sendMessage('!V POST_EVENT ODDBALL %s' % Oddball)

        if Estimation_Select_2.keys == 'left' and Outcome == 1:
            el_tracker.sendMessage("POST_EVENT OUTCOME SURPRISE_SHOCK")

        if Estimation_Select_2.keys == 'left' and Outcome == 0:
            el_tracker.sendMessage("POST_EVENT OUTCOME NOSURPRISE_NOSHOCK")

        if Estimation_Select_2.keys == 'right' and Outcome == 1:
            el_tracker.sendMessage("POST_EVENT OUTCOME NOSURPRISE_SHOCK")

        if Estimation_Select_2.keys == 'right' and Outcome == 0:
            el_tracker.sendMessage("POST_EVENT OUTCOME SURPRISE_NOSHOCK")
      End Routine:
        time_trialEnd = globalClock.getTime()

        thisExp.addData('Post2_ISI_Begin', time_trialBegin)
        thisExp.addData('Post2_ISI_End', time_trialEnd)

        el_tracker.sendMessage(f"TRIAL_END")
        el_tracker.sendMessage(f"TRIAL_TIME_END {time_trialEnd:.3f}")
Flow
  Routine Initialisation
  Routine Instructions
  Routine Instructions_2
  Routine Instructions_3
  Routine Instructions_4
  Routine Shock_Calib_Instr
  Routine Shock_Calib_Instr2
  LoopInitiator SecondLoopPass loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 99
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    LoopInitiator FirstLoopPass loopType="TrialHandler"
      isTrials = False
      loopType = random
      nReps = 99
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      LoopInitiator Checkpoint loopType="TrialHandler"
        isTrials = False
        loopType = random
        nReps = 99
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        LoopInitiator Cali_Loop loopType="TrialHandler"
          conditionsFile = Conditions/Shock_Calibration_Sched.xlsx
          loopType = sequential
          nReps = 1
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          conditions:
            [{'Set_Demand': 10, 'Set_Width': 2000},
            {'Set_Demand': 20, 'Set_Width': 2000},
            {'Set_Demand': 30, 'Set_Width': 2000},
            {'Set_Demand': 40, 'Set_Width': 2000},
            {'Set_Demand': 50, 'Set_Width': 2000},
            {'Set_Demand': 60, 'Set_Width': 2000},
            {'Set_Demand': 70, 'Set_Width': 2000},
            {'Set_Demand': 80, 'Set_Width': 2000},
            {'Set_Demand': 90, 'Set_Width': 2000},
            {'Set_Demand': 100, 'Set_Width': 2000}]
          Routine Pre_Shock_ISI_Calib
          Routine Shock_ISI_Calib
          Routine Shock_Calib_Looper
        LoopTerminator Cali_Loop
        Routine Loop_Checkpoint
      LoopTerminator Checkpoint
      Routine Pre_Shock_ISI_Cali_Check_1
      Routine Shock_ISI_Post_Check_1
      Routine Shock_Calib_Looper_2
    LoopTerminator FirstLoopPass
    Routine Pre_Shock_ISI_Cali_Check_2
    Routine Shock_ISI_Post_Check_2
    Routine Shock_Calib_Looper_3
  LoopTerminator SecondLoopPass
  Routine EyeL_calib_instr
  Routine EyeL_Calib
  Routine Instructions_Final
  LoopInitiator Prompt_Looper loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 5
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    Routine ScannerPrompt
  LoopTerminator Prompt_Looper
  Routine Begin_Recording
  Routine Pre_Block_ISI
  LoopInitiator InnerLoop loopType="TrialHandler"
    conditionsFile = $VersionSelection_H1
    loopType = sequential
    nReps = 1
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    Routine Blank
    Routine Main_Routine_Stimulus_Selection_H1
    Routine Main_Routine_Stimulus_Post_Selection_H1
    Routine Blank
    Routine Main_Task_PostISI_H1
    Routine Main_Task_Post_Outcome_H1
    Routine Main_Routine_ISI_H1
  LoopTerminator InnerLoop
  Routine End_Recording
  Routine Break
  Routine Post_Break
  Routine Recal_Instr
  LoopInitiator SecondLoopPass2 loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 99
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    LoopInitiator FirstLoopPass2 loopType="TrialHandler"
      isTrials = False
      loopType = random
      nReps = 99
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      LoopInitiator Checkpoint2 loopType="TrialHandler"
        isTrials = False
        loopType = random
        nReps = 99
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        LoopInitiator CaliLoop2 loopType="TrialHandler"
          conditionsFile = Conditions/Shock_Calibration_Sched.xlsx
          loopType = sequential
          nReps = 1
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          conditions:
            [{'Set_Demand': 10, 'Set_Width': 2000},
            {'Set_Demand': 20, 'Set_Width': 2000},
            {'Set_Demand': 30, 'Set_Width': 2000},
            {'Set_Demand': 40, 'Set_Width': 2000},
            {'Set_Demand': 50, 'Set_Width': 2000},
            {'Set_Demand': 60, 'Set_Width': 2000},
            {'Set_Demand': 70, 'Set_Width': 2000},
            {'Set_Demand': 80, 'Set_Width': 2000},
            {'Set_Demand': 90, 'Set_Width': 2000},
            {'Set_Demand': 100, 'Set_Width': 2000}]
          Routine Pre_Shock_ISI_Calib_2
          Routine Shock_ISI_Calib_2
          Routine Shock_Calib_Looper_5
        LoopTerminator CaliLoop2
        Routine Loop_Checkpoint_2
      LoopTerminator Checkpoint2
      Routine Pre_Shock_ISI_Cali_Check_1_2
      Routine Shock_ISI_Post_Check_1_2
      Routine Shock_Calib_Looper_6
    LoopTerminator FirstLoopPass2
    Routine Pre_Shock_ISI_Check_2_2
    Routine Shock_ISI_Post_Check_2_2
    Routine Shock_Calib_Looper_7
  LoopTerminator SecondLoopPass2
  Routine EyeL_calib_instr
  Routine EyeTracker_Cali
  Routine Instructions_Final_2
  Routine Begin_Recording_2
  Routine Pre_Block_ISI
  LoopInitiator InnerLoop2 loopType="TrialHandler"
    conditionsFile = $VersionSelection_H2
    loopType = sequential
    nReps = 1
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    Routine Blank
    Routine Main_Routine_Stimulus_Selection_H2
    Routine Main_Routine_Stimulus_Post_Selection_H2
    Routine Blank
    Routine Main_Task_PostISI_H2
    Routine Main_Task_Post_Outcome_H2
    Routine Main_Routine_ISI_H2_2
  LoopTerminator InnerLoop2
  Routine End_Recording_2
  Routine Task_End
